PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Use version = latest
  Window size (pixels) = [1366, 768]
  expName = ImageRSVP
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        RSVP_onsets = [400,500,600,700,800,900,1000,1100,1200]

        RSVP_onset1 = RSVP_onsets[0]
        RSVP_onset2 = RSVP_onsets[1]
        RSVP_onset3 = RSVP_onsets[2]
        RSVP_onset4 = RSVP_onsets[3]
        RSVP_onset5 = RSVP_onsets[4]
        RSVP_onset6 = RSVP_onsets[5]
        RSVP_onset7 = RSVP_onsets[6]
        RSVP_onset8 = RSVP_onsets[7]
        RSVP_onset9 = RSVP_onsets[8]
    ImageComponent P1
      size = (0.5, 0.5)
      startVal [time (s)] = $RSVP_onset1
      stopVal [duration (s)] = $RSVP_ms
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    ImageComponent P2
      size = (0.5, 0.5)
      startVal [time (s)] = $RSVP_onset2
      stopVal [duration (s)] = $RSVP_ms
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    ImageComponent P3
      size = (0.5, 0.5)
      startVal [time (s)] = $RSVP_onset3
      stopVal [duration (s)] = $RSVP_ms
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    ImageComponent P4
      size = (0.5, 0.5)
      startVal [time (s)] = $RSVP_onset4
      stopVal [duration (s)] = $RSVP_ms
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    ImageComponent P5
      size = (0.5, 0.5)
      startVal [time (s)] = $RSVP_onset5
      stopVal [duration (s)] = $RSVP_ms
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    ImageComponent P6
      size = (0.5, 0.5)
      startVal [time (s)] = $RSVP_onset6
      stopVal [duration (s)] = $RSVP_ms
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    ImageComponent P7
      size = (0.5, 0.5)
      startVal [time (s)] = $RSVP_onset7
      stopVal [duration (s)] = $RSVP_ms
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    ImageComponent P8
      size = (0.5, 0.5)
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    ImageComponent P9
      size = (0.5, 0.5)
      startVal [time (s)] = $RSVP_onset9
      stopVal [duration (s)] = $RSVP_ms
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    ImageComponent P10
      size = (0.5, 0.5)
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    ImageComponent P11
      size = (0.5, 0.5)
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    ImageComponent P12
      size = (0.5, 0.5)
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    ImageComponent P13
      size = (0.5, 0.5)
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    ImageComponent P14
      size = (0.5, 0.5)
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    ImageComponent P15
      size = (0.5, 0.5)
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    ImageComponent P16
      size = (0.5, 0.5)
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    ImageComponent P17
      size = (0.5, 0.5)
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    ImageComponent P18
      size = (0.5, 0.5)
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Flow
  Routine trial
