PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Use version = latest
  Window size (pixels) = [1366, 768]
  expName = LetterRSVP - Copy
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Routines
  Routine instr
    TextComponent text
      letterHeight = 10
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
