PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Use version = latest
  Window size (pixels) = [1366, 768]
  expName = LetterRSVP
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import random
        import subprocess
        import xlrd

        Letters = ["W", "E", "T","Y", "I", "A", "F", "H", "K", "L", "S", "V", "G", "J"]

        Tpos = [8,9,10,11,12]
      Begin Routine:
        random.shuffle(Letters)
        random.shuffle(Tpos)

        if Tpos[0] == 8:
            P1.setText(Letters[0])
            P2.setText(Letters[1])
            P3.setText(Letters[2])
            P4.setText(Letters[3])
            P5.setText(Letters[4])
            P6.setText(Letters[5])
            P7.setText(Letters[6])
            P8.setText(Target)
            P9.setText(Letters[7])
            P10.setText(Letters[8])
            P11.setText(Letters[9])
            P12.setText(Letters[10])
            P13.setText(Letters[11])
            P14.setText(Letters[12])
            P15.setText(Letters[13])
        elif Tpos[0] == 9:
            P1.setText(Letters[0])
            P2.setText(Letters[1])
            P3.setText(Letters[2])
            P4.setText(Letters[3])
            P5.setText(Letters[4])
            P6.setText(Letters[5])
            P7.setText(Letters[6])
            P8.setText(Letters[7])
            P9.setText(Target)
            P10.setText(Letters[8])
            P11.setText(Letters[9])
            P12.setText(Letters[10])
            P13.setText(Letters[11])
            P14.setText(Letters[12])
            P15.setText(Letters[13])
        elif Tpos[0] == 10:
            P1.setText(Letters[0])
            P2.setText(Letters[1])
            P3.setText(Letters[2])
            P4.setText(Letters[3])
            P5.setText(Letters[4])
            P6.setText(Letters[5])
            P7.setText(Letters[6])
            P8.setText(Letters[7])
            P9.setText(Letters[8])
            P10.setText(Target)
            P11.setText(Letters[9])
            P12.setText(Letters[10])
            P13.setText(Letters[11])
            P14.setText(Letters[12])
            P15.setText(Letters[13])
        elif Tpos[0] == 11:
            P1.setText(Letters[0])
            P2.setText(Letters[1])
            P3.setText(Letters[2])
            P4.setText(Letters[3])
            P5.setText(Letters[4])
            P6.setText(Letters[5])
            P7.setText(Letters[6])
            P8.setText(Letters[7])
            P9.setText(Letters[8])
            P10.setText(Letters[9])
            P11.setText(Target)
            P12.setText(Letters[10])
            P13.setText(Letters[11])
            P14.setText(Letters[12])
            P15.setText(Letters[13])
        elif Tpos[0] == 12:
            P1.setText(Letters[0])
            P2.setText(Letters[1])
            P3.setText(Letters[2])
            P4.setText(Letters[3])
            P5.setText(Letters[4])
            P6.setText(Letters[5])
            P7.setText(Letters[6])
            P8.setText(Letters[7])
            P9.setText(Letters[8])
            P10.setText(Letters[9])
            P11.setText(Letters[10])
            P12.setText(Target)
            P13.setText(Letters[11])
            P14.setText(Letters[12])
            P15.setText(Letters[13])
    TextComponent Fixation
      letterHeight = 10
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 11
      text = .
      units = pix
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    TextComponent P1
      letterHeight = 10
      startVal [frame N] = 17
      stopVal [duration (frames)] = 3
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    TextComponent P2
      letterHeight = 10
      startVal [frame N] = 25
      stopVal [duration (frames)] = 3
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    TextComponent P3
      letterHeight = 10
      startVal [frame N] = 33
      stopVal [duration (frames)] = 3
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    TextComponent P4
      letterHeight = 10
      startVal [time (s)] = 41
      stopVal [duration (frames)] = 3
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    TextComponent P5
      letterHeight = 10
      startVal [frame N] = 49
      stopVal [duration (frames)] = 3
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    TextComponent P6
      letterHeight = 10
      startVal [frame N] = 57
      stopVal [duration (frames)] = 3
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    TextComponent P7
      letterHeight = 10
      startVal [frame N] = 65
      stopVal [duration (frames)] = 3
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    TextComponent P8
      letterHeight = 10
      startVal [frame N] = 73
      stopVal [duration (frames)] = 3
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    TextComponent P9
      letterHeight = 10
      startVal [frame N] = 81
      stopVal [duration (frames)] = 3
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    TextComponent P10
      letterHeight = 10
      startVal [frame N] = 89
      stopVal [duration (frames)] = 3
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    TextComponent P11
      letterHeight = 1.4
      startVal [frame N] = 97
      stopVal [duration (frames)] = 3
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    TextComponent P12
      letterHeight = 10
      startVal [frame N] = 105
      stopVal [duration (frames)] = 3
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    TextComponent P13
      letterHeight = 10
      startVal [frame N] = 113
      stopVal [duration (frames)] = 3
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    TextComponent P14
      letterHeight = 10
      startVal [frame N] = 121
      stopVal [duration (frames)] = 3
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
    KeyboardComponent RSVPresp
      allowedKeys = 'z','x','n','m'
      correctAns = $correctresp
      forceEndRoutine = True
      startVal [frame N] = 133
      storeCorrect = True
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    TextComponent ResponseWindow
      letterHeight = 10
      startVal [frame N] = 132
      text = ?
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  Routine instr
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 1:80
    conditionsFile = RSVPtrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Order', 1), ('LeftD', 'FEAR'), ('RightD', None), ('Target', 'M'), ('correctresp', 'm'), ('Lag', 1)]),
      OrderedDict([('Order', 2), ('LeftD', 'NEUTRAL'), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', 1)]),
      OrderedDict([('Order', 3), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')]),
      OrderedDict([('Order', 4), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')]),
      OrderedDict([('Order', 5), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')]),
      OrderedDict([('Order', 6), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')]),
      OrderedDict([('Order', 7), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')]),
      OrderedDict([('Order', 8), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')]),
      OrderedDict([('Order', 9), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')]),
      OrderedDict([('Order', 10), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')]),
      OrderedDict([('Order', 11), ('LeftD', ' '), ('RightD', 'FEAR'), ('Target', 'M'), ('correctresp', 'm'), ('Lag', 2)]),
      OrderedDict([('Order', 12), ('LeftD', ' '), ('RightD', 'NEUTRAL'), ('Target', 'M'), ('correctresp', 'm'), ('Lag', 2)]),
      OrderedDict([('Order', 13), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')])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
    Routine trial
  LoopTerminator trials
