PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = pix
  Window size (pixels) = [1366, 768]
  color = $[-1,-1,-1]
  expName = LetterRSVP_rareD
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import random, subprocess
        import os
        import csv
        import xlrd

        directory = os.getcwd()
        # randomise seed
        random.seed()

        #Filler letters
        Letters = ["W", "E", "T","Y", "I", "A", "F", "H", "K", "L", "S", "V", "G", "J"]

        #Target positions
        Tpos = [7,8,9,10,11,12]



        # green, blue, orange, yellow

        FillCol = [(-1,1,-1), (-1,-1,1), (1,0.5,-1),(1,1,-1),(-1,1,-1), (-1,-1,1), (1,0.5,-1),(1,1,-1),(-1,1,-1), (-1,-1,1), (1,0.5,-1),(1,1,-1),(-1,1,-1), (-1,-1,1), (1,0.5,-1),(1,1,-1)]

        h = 0.6

        # Red counterbalanced
        T_color = (1,-1,-1)

        frameNs = [13,21,29,37,45,53,61,69,77,85,93,101,109,17,125]


        startFrame1 = frameNs[0]
        startFrame2 = frameNs[1]
        startFrame3 = frameNs[2]
        startFrame4 = frameNs[3]
        startFrame5 = frameNs[4]
        startFrame6 = frameNs[5]
        startFrame7 = frameNs[6]
        startFrame8 = frameNs[7]
        startFrame9 = frameNs[8]
        startFrame10 = frameNs[9]
        startFrame11 = frameNs[10]
        startFrame12 = frameNs[11]
        startFrame13 = frameNs[12]
        startFrame14 = frameNs[13]
        startFrame15 = frameNs[14]

        RW = (frameNs[14] + 3 + 3)
        LagFrame = 0


        #IMPORT DISTRACTOR IMAGES

        import csv

        FearLeft_trials = ['FEAR1.bmp','FEAR2.bmp','FEAR3.bmp','FEAR4.bmp','FEAR5.bmp','FEAR6.bmp','FEAR7.bmp','FEAR8.bmp','FEAR1.bmp','FEAR2.bmp','FEAR3.bmp','FEAR4.bmp','FEAR5.bmp','FEAR6.bmp','FEAR7.bmp','FEAR8.bmp']
        FearRight_trials = ['FEAR1.bmp','FEAR2.bmp','FEAR3.bmp','FEAR4.bmp','FEAR5.bmp','FEAR6.bmp','FEAR7.bmp','FEAR8.bmp','FEAR1.bmp','FEAR2.bmp','FEAR3.bmp','FEAR4.bmp','FEAR5.bmp','FEAR6.bmp','FEAR7.bmp','FEAR8.bmp']
        NeutralLeft_trials = ['NEUTRAL1.bmp','NEUTRAL2.bmp','NEUTRAL3.bmp','NEUTRAL4.bmp','NEUTRAL5.bmp','NEUTRAL6.bmp','NEUTRAL7.bmp','NEUTRAL8.bmp','NEUTRAL1.bmp','NEUTRAL2.bmp','NEUTRAL3.bmp','NEUTRAL4.bmp','NEUTRAL5.bmp','NEUTRAL6.bmp','NEUTRAL7.bmp','NEUTRAL8.bmp']
        NeutralRight_trials = ['NEUTRAL1.bmp','NEUTRAL2.bmp','NEUTRAL3.bmp','NEUTRAL4.bmp','NEUTRAL5.bmp','NEUTRAL6.bmp','NEUTRAL7.bmp','NEUTRAL8.bmp','NEUTRAL1.bmp','NEUTRAL2.bmp','NEUTRAL3.bmp','NEUTRAL4.bmp','NEUTRAL5.bmp','NEUTRAL6.bmp','NEUTRAL7.bmp','NEUTRAL8.bmp']

        #NUMBER OF DISTRACTOR IMAGES AND PRESENTATION

        distractor_presentations = 16

        FearLeft_marker = 0
        FearRight_marker = 0
        NeutralLeft_marker = 0
        NeutralRight_marker = 0

        random.shuffle(FearLeft_trials)
        random.shuffle(FearRight_trials)
        random.shuffle(NeutralLeft_trials)
        random.shuffle(NeutralRight_trials)
      Begin Routine:
        # randomise filler letters
        random.shuffle(Letters)

        #randomise target position
        random.shuffle(Tpos)

        # select the RSVP stream letters and colours for each target position
        if Tpos[0] == 7:
            P1.setText(Letters[0])
            P2.setText(Letters[1])
            P3.setText(Letters[2])
            P4.setText(Letters[3])
            P5.setText(Letters[4])
            P6.setText(Letters[5])
            P7.setText(Target)
            P8.setText(Letters[6])
            P9.setText(Letters[7])
            P10.setText(Letters[8])
            P11.setText(Letters[9])
            P12.setText(Letters[10])
            P13.setText(Letters[11])
            P14.setText(Letters[12])
            P15.setText(Letters[13])

            P1.setColor(FillCol[0], 'rgb')
            P2.setColor(FillCol[1], 'rgb')
            P3.setColor(FillCol[2], 'rgb')
            P4.setColor(FillCol[3], 'rgb')
            P5.setColor(FillCol[4], 'rgb')
            P6.setColor(FillCol[5], 'rgb')
            P7.setColor(T_color, 'rgb')
            P8.setColor(FillCol[6], 'rgb')
            P9.setColor(FillCol[7], 'rgb')
            P10.setColor(FillCol[8], 'rgb')
            P11.setColor(FillCol[9], 'rgb')
            P12.setColor(FillCol[10], 'rgb')
            P13.setColor(FillCol[11], 'rgb')
            P14.setColor(FillCol[12], 'rgb')
            P15.setColor(FillCol[13], 'rgb')

        # set distractor lag in stream
            if Lag == 1:
                LagFrame = frameNs[5]
            elif Lag == 2:
                LagFrame = frameNs[4]
            elif Lag == 3:
                LagFrame = frameNs[3]
            elif Lag == 4:
                LagFrame = frameNs[2]

        elif Tpos[0] == 8:
            P1.setText(Letters[0])
            P2.setText(Letters[1])
            P3.setText(Letters[2])
            P4.setText(Letters[3])
            P5.setText(Letters[4])
            P6.setText(Letters[5])
            P7.setText(Letters[6])
            P8.setText(Target)
            P9.setText(Letters[7])
            P10.setText(Letters[8])
            P11.setText(Letters[9])
            P12.setText(Letters[10])
            P13.setText(Letters[11])
            P14.setText(Letters[12])
            P15.setText(Letters[13])

            P1.setColor(FillCol[0], 'rgb')
            P2.setColor(FillCol[1], 'rgb')
            P3.setColor(FillCol[2], 'rgb')
            P4.setColor(FillCol[3], 'rgb')
            P5.setColor(FillCol[4], 'rgb')
            P6.setColor(FillCol[5], 'rgb')
            P7.setColor(FillCol[6], 'rgb')
            P8.setColor(T_color, 'rgb')
            P9.setColor(FillCol[7], 'rgb')
            P10.setColor(FillCol[8], 'rgb')
            P11.setColor(FillCol[9], 'rgb')
            P12.setColor(FillCol[10], 'rgb')
            P13.setColor(FillCol[11], 'rgb')
            P14.setColor(FillCol[12], 'rgb')
            P15.setColor(FillCol[13], 'rgb')


            if Lag == 1:
                LagFrame = frameNs[6]
            elif Lag == 2:
                LagFrame = frameNs[5]
            elif Lag == 3:
                LagFrame = frameNs[4]
            elif Lag == 4:
                LagFrame = frameNs[3]

        elif Tpos[0] == 9:
            P1.setText(Letters[0])
            P2.setText(Letters[1])
            P3.setText(Letters[2])
            P4.setText(Letters[3])
            P5.setText(Letters[4])
            P6.setText(Letters[5])
            P7.setText(Letters[6])
            P8.setText(Letters[7])
            P9.setText(Target)
            P10.setText(Letters[8])
            P11.setText(Letters[9])
            P12.setText(Letters[10])
            P13.setText(Letters[11])
            P14.setText(Letters[12])
            P15.setText(Letters[13])

            P1.setColor(FillCol[0], 'rgb')
            P2.setColor(FillCol[1], 'rgb')
            P3.setColor(FillCol[2], 'rgb')
            P4.setColor(FillCol[3], 'rgb')
            P5.setColor(FillCol[4], 'rgb')
            P6.setColor(FillCol[5], 'rgb')
            P7.setColor(FillCol[6], 'rgb')
            P8.setColor(FillCol[7], 'rgb')
            P9.setColor(T_color, 'rgb')
            P10.setColor(FillCol[8], 'rgb')
            P11.setColor(FillCol[9], 'rgb')
            P12.setColor(FillCol[10], 'rgb')
            P13.setColor(FillCol[11], 'rgb')
            P14.setColor(FillCol[12], 'rgb')
            P15.setColor(FillCol[13], 'rgb')

            if Lag == 1:
                LagFrame = frameNs[7]
            elif Lag == 2:
                LagFrame = frameNs[6]
            elif Lag == 3:
                LagFrame = frameNs[5]
            elif Lag == 4:
                LagFrame = frameNs[4]


        elif Tpos[0] == 10:
            P1.setText(Letters[0])
            P2.setText(Letters[1])
            P3.setText(Letters[2])
            P4.setText(Letters[3])
            P5.setText(Letters[4])
            P6.setText(Letters[5])
            P7.setText(Letters[6])
            P8.setText(Letters[7])
            P9.setText(Letters[8])
            P10.setText(Target)
            P11.setText(Letters[9])
            P12.setText(Letters[10])
            P13.setText(Letters[11])
            P14.setText(Letters[12])
            P15.setText(Letters[13])

            P1.setColor(FillCol[0], 'rgb')
            P2.setColor(FillCol[1], 'rgb')
            P3.setColor(FillCol[2], 'rgb')
            P4.setColor(FillCol[3], 'rgb')
            P5.setColor(FillCol[4], 'rgb')
            P6.setColor(FillCol[5], 'rgb')
            P7.setColor(FillCol[6], 'rgb')
            P8.setColor(FillCol[7], 'rgb')
            P9.setColor(FillCol[8], 'rgb')
            P10.setColor(T_color, 'rgb')
            P11.setColor(FillCol[9], 'rgb')
            P12.setColor(FillCol[10], 'rgb')
            P13.setColor(FillCol[11], 'rgb')
            P14.setColor(FillCol[12], 'rgb')
            P15.setColor(FillCol[13], 'rgb')

            if Lag == 1:
                LagFrame = frameNs[8]
            elif Lag == 2:
                LagFrame = frameNs[7]
            elif Lag == 3:
                LagFrame = frameNs[6]
            elif Lag == 4:
                LagFrame = frameNs[5]



        elif Tpos[0] == 11:
            P1.setText(Letters[0])
            P2.setText(Letters[1])
            P3.setText(Letters[2])
            P4.setText(Letters[3])
            P5.setText(Letters[4])
            P6.setText(Letters[5])
            P7.setText(Letters[6])
            P8.setText(Letters[7])
            P9.setText(Letters[8])
            P10.setText(Letters[9])
            P11.setText(Target)
            P12.setText(Letters[10])
            P13.setText(Letters[11])
            P14.setText(Letters[12])
            P15.setText(Letters[13])

            P1.setColor(FillCol[0], 'rgb')
            P2.setColor(FillCol[1], 'rgb')
            P3.setColor(FillCol[2], 'rgb')
            P4.setColor(FillCol[3], 'rgb')
            P5.setColor(FillCol[4], 'rgb')
            P6.setColor(FillCol[5], 'rgb')
            P7.setColor(FillCol[6], 'rgb')
            P8.setColor(FillCol[7], 'rgb')
            P9.setColor(FillCol[8], 'rgb')
            P10.setColor(FillCol[9], 'rgb')
            P11.setColor(T_color, 'rgb')
            P12.setColor(FillCol[10], 'rgb')
            P13.setColor(FillCol[11], 'rgb')
            P14.setColor(FillCol[12], 'rgb')
            P15.setColor(FillCol[13], 'rgb')

            if Lag == 1:
                LagFrame = frameNs[9]
            elif Lag == 2:
                LagFrame = frameNs[8]
            elif Lag == 3:
                LagFrame = frameNs[7]
            elif Lag == 4:
                LagFrame = frameNs[6]


        elif Tpos[0] == 12:
            P1.setText(Letters[0])
            P2.setText(Letters[1])
            P3.setText(Letters[2])
            P4.setText(Letters[3])
            P5.setText(Letters[4])
            P6.setText(Letters[5])
            P7.setText(Letters[6])
            P8.setText(Letters[7])
            P9.setText(Letters[8])
            P10.setText(Letters[9])
            P11.setText(Letters[10])
            P12.setText(Target)
            P13.setText(Letters[11])
            P14.setText(Letters[12])
            P15.setText(Letters[13])

            P1.setColor(FillCol[0], 'rgb')
            P2.setColor(FillCol[1], 'rgb')
            P3.setColor(FillCol[2], 'rgb')
            P4.setColor(FillCol[3], 'rgb')
            P5.setColor(FillCol[4], 'rgb')
            P6.setColor(FillCol[5], 'rgb')
            P7.setColor(FillCol[6], 'rgb')
            P8.setColor(FillCol[7], 'rgb')
            P9.setColor(FillCol[8], 'rgb')
            P10.setColor(FillCol[9], 'rgb')
            P11.setColor(FillCol[10], 'rgb')
            P12.setColor(T_color, 'rgb')
            P13.setColor(FillCol[11], 'rgb')
            P14.setColor(FillCol[12], 'rgb')
            P15.setColor(FillCol[13], 'rgb')

            if Lag == 1:
                LagFrame = frameNs[10]
            elif Lag == 2:
                LagFrame = frameNs[9]
            elif Lag == 3:
                LagFrame = frameNs[8]
            elif Lag == 4:
                LagFrame = frameNs[7]



        random.shuffle(FearLeft_trials)
        random.shuffle(FearRight_trials)
        random.shuffle(NeutralLeft_trials)
        random.shuffle(NeutralRight_trials)

        if LeftD == "FEAR":
            D_R = "BLANK.bmp"
            D_L = FearLeft_trials[FearLeft_marker]
            FearLeft_marker += 1
            if FearLeft_marker == distractor_presentations:
                FearLeft_marker = 0
        elif RightD == "FEAR":
            D_L = "BLANK.bmp"
            D_R = FearRight_trials[FearRight_marker]
            FearRight_marker += 1
            if FearRight_marker == distractor_presentations:
                FearRight_marker = 0
        elif LeftD == "NEUTRAL":
            D_R = "BLANK.bmp"
            D_L = NeutralLeft_trials[NeutralLeft_marker]
            NeutralLeft_marker += 1
            if NeutralLeft_marker == distractor_presentations:
                NeutralLeft_marker = 0
        elif RightD == "NEUTRAL":
            D_L = "BLANK.bmp"
            D_R =  NeutralRight_trials[NeutralRight_marker]
            NeutralRight_marker += 1
            if NeutralRight_marker == distractor_presentations:
                NeutralRight_marker = 0
        else:
            D_L = "BLANK.bmp"
            D_R = "BLANK.bmp"

        FearLeft_trials[FearLeft_marker]
        FearRight_trials[FearRight_marker]
        NeutralLeft_trials[NeutralLeft_marker]
        NeutralRight_trials[NeutralRight_marker]
    TextComponent fixation
      color = black
      letterHeight = 20
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 12
      text = +
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    TextComponent P1
      startVal [frame N] = $startFrame1
      stopVal [duration (frames)] = 3
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    TextComponent P2
      startVal [frame N] = $startFrame2
      stopVal [duration (frames)] = 3
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    TextComponent P3
      startVal [frame N] = $startFrame3
      stopVal [duration (frames)] = 3
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    TextComponent P4
      startVal [frame N] = $startFrame4
      stopVal [duration (frames)] = 3
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    TextComponent P5
      startVal [frame N] = $startFrame5
      stopVal [duration (frames)] = 3
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    TextComponent P6
      startVal [frame N] = $startFrame6
      stopVal [duration (frames)] = 3
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    TextComponent P7
      startVal [frame N] = $startFrame7
      stopVal [duration (frames)] = 3
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    TextComponent P8
      startVal [frame N] = $startFrame8
      stopVal [duration (frames)] = 3
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    TextComponent P9
      startVal [frame N] = $startFrame9
      stopVal [duration (frames)] = 3
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    TextComponent P10
      startVal [frame N] = $startFrame10
      stopVal [duration (frames)] = 3
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    TextComponent P11
      startVal [frame N] = $startFrame11
      stopVal [duration (frames)] = 3
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    TextComponent P12
      startVal [frame N] = $startFrame12
      stopVal [duration (frames)] = 3
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
    TextComponent ResponseWindow
      letterHeight = 20
      startVal [frame N] = $RW
      text = ?
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    KeyboardComponent response
      allowedKeys = 'z','x','n','m'
      correctAns = $correctresp
      discard previous = False
      forceEndRoutine = True
      startVal [frame N] = $RW
      storeCorrect = True
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    ImageComponent LeftDistractor
      image [set every repeat] = $D_L
      pos = (-80, 0)
      size = (100, 150)
      startVal [frame N] = $LagFrame
      stopVal [duration (frames)] = 3
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    ImageComponent RightDistractor
      image [set every repeat] = $D_R
      pos = (80, 0)
      size = (100, 150)
      startVal [frame N] = $LagFrame
      stopVal [duration (frames)] = 3
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  Routine RandomiseStim
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        random.shuffle(FEAR)
        random.shuffle(NEUTRAL)

        FearLoop = 0
        NeutralLoop = 0

        D_L = "FEAR1.bmp"
        D_R = "FEAR1.bmp"
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = RSVPtrials_rareA.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Order', 1), ('LeftD', 'FEAR'), ('RightD', None), ('Target', 'Z'), ('correctresp', 'z'), ('Lag', 1.0)]),
      OrderedDict([('Order', 2), ('LeftD', None), ('RightD', None), ('Target', 'Z'), ('correctresp', 'z'), ('Lag', None)]),
      OrderedDict([('Order', 3), ('LeftD', None), ('RightD', None), ('Target', 'Z'), ('correctresp', 'z'), ('Lag', None)]),
      OrderedDict([('Order', 4), ('LeftD', None), ('RightD', None), ('Target', 'Z'), ('correctresp', 'z'), ('Lag', None)]),
      OrderedDict([('Order', 5), ('LeftD', 'FEAR'), ('RightD', None), ('Target', 'X'), ('correctresp', 'x'), ('Lag', 2.0)]),
      OrderedDict([('Order', 6), ('LeftD', None), ('RightD', None), ('Target', 'X'), ('correctresp', 'x'), ('Lag', None)]),
      OrderedDict([('Order', 7), ('LeftD', None), ('RightD', None), ('Target', 'X'), ('correctresp', 'x'), ('Lag', None)]),
      OrderedDict([('Order', 8), ('LeftD', None), ('RightD', None), ('Target', 'X'), ('correctresp', 'x'), ('Lag', None)]),
      OrderedDict([('Order', 9), ('LeftD', 'FEAR'), ('RightD', None), ('Target', 'N'), ('correctresp', 'n'), ('Lag', 3.0)]),
      OrderedDict([('Order', 10), ('LeftD', None), ('RightD', None), ('Target', 'N'), ('correctresp', 'n'), ('Lag', None)]),
      OrderedDict([('Order', 11), ('LeftD', None), ('RightD', None), ('Target', 'N'), ('correctresp', 'n'), ('Lag', None)]),
      OrderedDict([('Order', 12), ('LeftD', None), ('RightD', None), ('Target', 'N'), ('correctresp', 'n'), ('Lag', None)])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
    Routine trial
  LoopTerminator trials
