PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = test
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Routines
  Routine trial
    TextComponent fixation
      color = black
      letterHeight = 0.6
      startVal [frame N] = 0
      stopVal [duration (s)] = 100
      text = +
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    TextComponent ResponseWindow
      color = black
      letterHeight = 10
      startVal [time (s)] = 0
      text = ?
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    KeyboardComponent Response
      allowedKeys = 'z','x','n','m'
      correctAns = $correctans
      forceEndRoutine = True
      startVal [time (s)] = 0
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Flow
  Routine trial
