PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = transf
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import random
        import subprocess
        import xlrd

        Letters = ["W", "E", "T","Y", "I", "A", "F", "H", "K", "L", "S", "V", "G", "J"]
        Tpos = [8,9,10,11,12]

        FillCol = [(1,1,1)]
      Begin Routine:
        random.shuffle(Letters)
        random.shuffle(Tpos)

        if Tpos[0] == 8:
            P1.setText(Letters[0])
            P2.setText(Letters[1])
            P3.setText(Letters[2])
            P4.setText(Letters[3])
            P5.setText(Letters[4])
            P6.setText(Letters[5])
            P7.setText(Letters[6])
            P8.setText(Target)
            P9.setText(Letters[7])
            P10.setText(Letters[8])
            P11.setText(Letters[9])
            P12.setText(Letters[10])
            P13.setText(Letters[11])
            P14.setText(Letters[12])
            P15.setText(Letters[13])

            P1.setColor(FillCol[0], 'rgb')
            P2.setColor(FillCol[0], 'rgb')
            P3.setColor(FillCol[0], 'rgb')
            P4.setColor(FillCol[0], 'rgb')
            P5.setColor(FillCol[0], 'rgb')
            P6.setColor(FillCol[0], 'rgb')
            P7.setColor(FillCol[0], 'rgb')
            P8.setColor(FillCol[0], 'rgb')
            P9.setColor(FillCol[0], 'rgb')
            P10.setColor(FillCol[0], 'rgb')
            P11.setColor(FillCol[0], 'rgb')
            P12.setColor(FillCol[0], 'rgb')
            P13.setColor(FillCol[0], 'rgb')
            P14.setColor(FillCol[0], 'rgb')
            P15.setColor(FillCol[0], 'rgb')


        elif Tpos[0] == 9:
            P1.setText(Letters[0])
            P2.setText(Letters[1])
            P3.setText(Letters[2])
            P4.setText(Letters[3])
            P5.setText(Letters[4])
            P6.setText(Letters[5])
            P7.setText(Letters[6])
            P8.setText(Letters[7])
            P9.setText(Target)
            P10.setText(Letters[8])
            P11.setText(Letters[9])
            P12.setText(Letters[10])
            P13.setText(Letters[11])
            P14.setText(Letters[12])
            P15.setText(Letters[13])

            P1.setColor(FillCol[0], 'rgb')
            P2.setColor(FillCol[0], 'rgb')
            P3.setColor(FillCol[0], 'rgb')
            P4.setColor(FillCol[0], 'rgb')
            P5.setColor(FillCol[0], 'rgb')
            P6.setColor(FillCol[0], 'rgb')
            P7.setColor(FillCol[0], 'rgb')
            P8.setColor(FillCol[0], 'rgb')
            P9.setColor(FillCol[0], 'rgb')
            P10.setColor(FillCol[0], 'rgb')
            P11.setColor(FillCol[0], 'rgb')
            P12.setColor(FillCol[0], 'rgb')
            P13.setColor(FillCol[0], 'rgb')
            P14.setColor(FillCol[0], 'rgb')
            P15.setColor(FillCol[0], 'rgb')
        elif Tpos[0] == 10:
            P1.setText(Letters[0])
            P2.setText(Letters[1])
            P3.setText(Letters[2])
            P4.setText(Letters[3])
            P5.setText(Letters[4])
            P6.setText(Letters[5])
            P7.setText(Letters[6])
            P8.setText(Letters[7])
            P9.setText(Letters[8])
            P10.setText(Target)
            P11.setText(Letters[9])
            P12.setText(Letters[10])
            P13.setText(Letters[11])
            P14.setText(Letters[12])
            P15.setText(Letters[13])

            P1.setColor(FillCol[0], 'rgb')
            P2.setColor(FillCol[0], 'rgb')
            P3.setColor(FillCol[0], 'rgb')
            P4.setColor(FillCol[0], 'rgb')
            P5.setColor(FillCol[0], 'rgb')
            P6.setColor(FillCol[0], 'rgb')
            P7.setColor(FillCol[0], 'rgb')
            P8.setColor(FillCol[0], 'rgb')
            P9.setColor(FillCol[0], 'rgb')
            P10.setColor(FillCol[0], 'rgb')
            P11.setColor(FillCol[0], 'rgb')
            P12.setColor(FillCol[0], 'rgb')
            P13.setColor(FillCol[0], 'rgb')
            P14.setColor(FillCol[0], 'rgb')
            P15.setColor(FillCol[0], 'rgb')

        elif Tpos[0] == 11:
            P1.setText(Letters[0])
            P2.setText(Letters[1])
            P3.setText(Letters[2])
            P4.setText(Letters[3])
            P5.setText(Letters[4])
            P6.setText(Letters[5])
            P7.setText(Letters[6])
            P8.setText(Letters[7])
            P9.setText(Letters[8])
            P10.setText(Letters[9])
            P11.setText(Target)
            P12.setText(Letters[10])
            P13.setText(Letters[11])
            P14.setText(Letters[12])
            P15.setText(Letters[13])

            P1.setColor(FillCol[0], 'rgb')
            P2.setColor(FillCol[0], 'rgb')
            P3.setColor(FillCol[0], 'rgb')
            P4.setColor(FillCol[0], 'rgb')
            P5.setColor(FillCol[0], 'rgb')
            P6.setColor(FillCol[0], 'rgb')
            P7.setColor(FillCol[0], 'rgb')
            P8.setColor(FillCol[0], 'rgb')
            P9.setColor(FillCol[0], 'rgb')
            P10.setColor(FillCol[0], 'rgb')
            P11.setColor(FillCol[0], 'rgb')
            P12.setColor(FillCol[0], 'rgb')
            P13.setColor(FillCol[0], 'rgb')
            P14.setColor(FillCol[0], 'rgb')
            P15.setColor(FillCol[0], 'rgb')

        elif Tpos[0] == 12:
            P1.setText(Letters[0])
            P2.setText(Letters[1])
            P3.setText(Letters[2])
            P4.setText(Letters[3])
            P5.setText(Letters[4])
            P6.setText(Letters[5])
            P7.setText(Letters[6])
            P8.setText(Letters[7])
            P9.setText(Letters[8])
            P10.setText(Letters[9])
            P11.setText(Letters[10])
            P12.setText(Target)
            P13.setText(Letters[11])
            P14.setText(Letters[12])
            P15.setText(Letters[13])

            P1.setColor(FillCol[0], 'rgb')
            P2.setColor(FillCol[0], 'rgb')
            P3.setColor(FillCol[0], 'rgb')
            P4.setColor(FillCol[0], 'rgb')
            P5.setColor(FillCol[0], 'rgb')
            P6.setColor(FillCol[0], 'rgb')
            P7.setColor(FillCol[0], 'rgb')
            P8.setColor(FillCol[0], 'rgb')
            P9.setColor(FillCol[0], 'rgb')
            P10.setColor(FillCol[0], 'rgb')
            P11.setColor(FillCol[0], 'rgb')
            P12.setColor(FillCol[0], 'rgb')
            P13.setColor(FillCol[0], 'rgb')
            P14.setColor(FillCol[0], 'rgb')
            P15.setColor(FillCol[0], 'rgb')
    TextComponent fixation
      color = black
      letterHeight = 0.6
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 12
      text = +
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    TextComponent P1
      letterHeight = 0.1
      startVal [frame N] = 12
      stopVal [duration (frames)] = 3
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    TextComponent P2
      letterHeight = 0.1
      startVal [frame N] = 21
      stopVal [duration (frames)] = 3
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      text:
        Any text

        including line breaks
    TextComponent P3
      letterHeight = 0.1
      startVal [frame N] = 29
      stopVal [duration (frames)] = 3
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    TextComponent P4
      letterHeight = 0.1
      startVal [frame N] = 37
      stopVal [duration (frames)] = 3
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      text:
        Any text

        including line breaks
    TextComponent P5
      letterHeight = 0.1
      startVal [frame N] = 45
      stopVal [duration (frames)] = 3
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      text:
        Any text

        including line breaks
    TextComponent P6
      letterHeight = 0.1
      startVal [frame N] = 53
      stopVal [duration (frames)] = 3
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    TextComponent P7
      letterHeight = 0.1
      startVal [frame N] = 61
      stopVal [duration (frames)] = 3
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    TextComponent P8
      letterHeight = 0.1
      startVal [frame N] = 69
      stopVal [duration (frames)] = 3
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    TextComponent P9
      letterHeight = 0.1
      startVal [frame N] = 77
      stopVal [duration (frames)] = 3
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    TextComponent P10
      letterHeight = 0.1
      startVal [frame N] = 85
      stopVal [duration (frames)] = 3
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    TextComponent P11
      letterHeight = 0.1
      startVal [frame N] = 93
      stopVal [duration (frames)] = 3
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    TextComponent P12
      letterHeight = 0.1
      startVal [frame N] = 101
      stopVal [duration (frames)] = 3
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    TextComponent P13
      letterHeight = 0.1
      startVal [frame N] = 109
      stopVal [duration (frames)] = 3
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    TextComponent P14
      letterHeight = 0.1
      startVal [frame N] = 117
      stopVal [duration (frames)] = 3
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    TextComponent P15
      letterHeight = 0.1
      startVal [frame N] = 125
      stopVal [duration (frames)] = 3
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    TextComponent ResponseWindow
      letterHeight = 10
      startVal [frame N] = 128
      stopVal [duration (frames)] = 1.0
      text = ?
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    KeyboardComponent Response
      allowedKeys = 'z','x','n','m'
      correctAns = $correctans
      forceEndRoutine = True
      startVal [frame N] = 128
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 1:80
    conditionsFile = RSVPtrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Order', 1), ('LeftD', 'FEAR'), ('RightD', None), ('Target', 'M'), ('correctresp', 'm'), ('Lag', 1)]),
      OrderedDict([('Order', 2), ('LeftD', 'NEUTRAL'), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', 1)]),
      OrderedDict([('Order', 3), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')]),
      OrderedDict([('Order', 4), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')]),
      OrderedDict([('Order', 5), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')]),
      OrderedDict([('Order', 6), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')]),
      OrderedDict([('Order', 7), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')]),
      OrderedDict([('Order', 8), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')]),
      OrderedDict([('Order', 9), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')]),
      OrderedDict([('Order', 10), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')]),
      OrderedDict([('Order', 11), ('LeftD', ' '), ('RightD', 'FEAR'), ('Target', 'M'), ('correctresp', 'm'), ('Lag', 2)]),
      OrderedDict([('Order', 12), ('LeftD', ' '), ('RightD', 'NEUTRAL'), ('Target', 'M'), ('correctresp', 'm'), ('Lag', 2)]),
      OrderedDict([('Order', 13), ('LeftD', ' '), ('RightD', ' '), ('Target', 'M'), ('correctresp', 'm'), ('Lag', ' ')])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
    Routine trial
  LoopTerminator trials
